PsychoPy2experiment version="2024.2.1"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = gaze_contingent_demo
  eyetracker = Pupil Labs (Neon)
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  plCompanionAddress = neon.local
  plCompanionPort = 8080
  plCompanionRecordingEnabled = False
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
  runMode = 1
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Routines
  Routine Cleanup
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    EyetrackerRecordComponent StopRecording
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent finish_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Finished!
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  Routine Init
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    EyetrackerRecordComponent start_recording
      actionType = Start Only
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Get ready...
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  Routine Trial
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    NeonEventComponent trialStartEvent
      event_name = trial-started
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      timestamp_ns = 0
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    PolygonComponent distractor_00
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (random()-.5)*1.2, (random()-.5)*0.6
      shape = circle
      size = .1, .1
      startVal [time (s)] = 1
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    PolygonComponent distractor_01
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = (random()-.5)*1.2, (random()-.5)*0.6
      shape = circle
      size = .1, .1
      startVal [time (s)] = 1
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    PolygonComponent distractor_02
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = (random()-.5)*1.2, (random()-.5)*0.6
      shape = circle
      size = .1, .1
      startVal [time (s)] = 1
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    PolygonComponent target
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = (random()-.5)*1.2, (random()-.5)*0.6
      shape = circle
      size = .1, .1
      startVal [time (s)] = 1
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos [set every repeat] = target.pos
      save = every look
      shape = circle
      size = target.size
      startVal [time (s)] = 1
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_indicator_1
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      opacity = .5
      pos [set every frame] = eyetracker.getPosition()
      shape = circle
      size = .1, .1
      startVal [time (s)] = 0
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    AprilTagFrameComponent tagFrame_2
      anchor = center
      contrast = 1
      h_count = 4
      marker_size = 0.125
      marker_units = from exp settings
      pos = (0, 0)
      size = [2, 2]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      units = norm
      v_count = 3
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  Routine SubjectReady
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = .1, .1
      startVal [time (s)] = 1
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    RegionOfInterestComponent fixation_aoi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = .1, .1
      startVal [time (s)] = 1
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_indicator_0
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      opacity = .5
      pos [set every frame] = eyetracker.getPosition()
      shape = circle
      size = .1, .1
      startVal [time (s)] = 0
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    AprilTagFrameComponent tagFrame
      anchor = center
      contrast = 1
      h_count = 4
      marker_size = 0.125
      marker_units = from exp settings
      pos = (0, 0)
      size = [2, 2]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      units = norm
      v_count = 3
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Flow
  Routine Init
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine SubjectReady
    Routine Trial
  LoopTerminator trials
  Routine Cleanup
